{
    "actions": {
        "acqdatetime": {
            "filters": {}, 
            "params": {}
        }, 
        "qc_series": {
            "filters": {}, 
            "params": {
                "detector_identification": {
                    "det1": { "0054,0400": "DET 1 EXTR" },
                    "det2": { "0054,0400": "DET 2 EXTR" }
                },
                "perform_dome_correction": 0
            }
        }
    },
    "cfgformat": "20180910", 
    "comments": {
        "author": "Tim de Wit, Amsterdam UMC", 
        "creator": "Tim de Wit, Amsterdam UMC", 
        "description": "NEMA Uniformity", 
        "params": {
            "detector_identification": "Used for linking specific series/instances to specific detectors (optional)",
            "perform_dome_correction": "Correct for small source-detector distance (typical for Siemens systems)" 
        }, 
        "usage": [],
        "version": "20180714"
    }
}
